/gate/source/addSource xraygun
/gate/source/xraygun/gps/type Volume
/gate/source/xraygun/gps/shape Sphere
/gate/source/xraygun/gps/radius 0.25 mm
/gate/source/verbose 0
/gate/source/xraygun/setActivity 35000. becquerel
/gate/source/xraygun/gps/verbose 0
/gate/source/xraygun/gps/particle gamma
/gate/source/xraygun/gps/energytype Arb
/gate/source/xraygun/gps/histname arb
/gate/source/xraygun/gps/emin 0.00 keV
/gate/source/xraygun/gps/emax 140.00 keV
/gate/source/xraygun/gps/histpoint 0.014 372666
/gate/source/xraygun/gps/histpoint 0.015 673570
/gate/source/xraygun/gps/histpoint 0.016 1085459
/gate/source/xraygun/gps/histpoint 0.017 1580994
/gate/source/xraygun/gps/histpoint 0.018 2133092
/gate/source/xraygun/gps/histpoint 0.019 2729291
/gate/source/xraygun/gps/histpoint 0.020 3343454
/gate/source/xraygun/gps/histpoint 0.021 3950951
/gate/source/xraygun/gps/histpoint 0.022 4536233
/gate/source/xraygun/gps/histpoint 0.023 5082130
/gate/source/xraygun/gps/histpoint 0.024 5577883
/gate/source/xraygun/gps/histpoint 0.025 6002543
/gate/source/xraygun/gps/histpoint 0.026 6396813
/gate/source/xraygun/gps/histpoint 0.027 6724897
/gate/source/xraygun/gps/histpoint 0.028 6999995
/gate/source/xraygun/gps/histpoint 0.029 7224311
/gate/source/xraygun/gps/histpoint 0.030 7387257
/gate/source/xraygun/gps/histpoint 0.031 7520674
/gate/source/xraygun/gps/histpoint 0.032 7600357
/gate/source/xraygun/gps/histpoint 0.033 7654739
/gate/source/xraygun/gps/histpoint 0.034 7687177
/gate/source/xraygun/gps/histpoint 0.035 7677268
/gate/source/xraygun/gps/histpoint 0.036 7630981
/gate/source/xraygun/gps/histpoint 0.037 7584651
/gate/source/xraygun/gps/histpoint 0.038 7515290
/gate/source/xraygun/gps/histpoint 0.039 7427488
/gate/source/xraygun/gps/histpoint 0.040 7326727
/gate/source/xraygun/gps/histpoint 0.041 7221989
/gate/source/xraygun/gps/histpoint 0.042 7105901
/gate/source/xraygun/gps/histpoint 0.043 6982953
/gate/source/xraygun/gps/histpoint 0.044 6855235
/gate/source/xraygun/gps/histpoint 0.045 6723910
/gate/source/xraygun/gps/histpoint 0.046 6588180
/gate/source/xraygun/gps/histpoint 0.047 6449737
/gate/source/xraygun/gps/histpoint 0.048 6311264
/gate/source/xraygun/gps/histpoint 0.049 6173162
/gate/source/xraygun/gps/histpoint 0.050 6034059
/gate/source/xraygun/gps/histpoint 0.051 5896310
/gate/source/xraygun/gps/histpoint 0.052 5758042
/gate/source/xraygun/gps/histpoint 0.053 5623292
/gate/source/xraygun/gps/histpoint 0.054 5489666
/gate/source/xraygun/gps/histpoint 0.055 5357308
/gate/source/xraygun/gps/histpoint 0.056 5225894
/gate/source/xraygun/gps/histpoint 0.057 5097526
/gate/source/xraygun/gps/histpoint 0.058 20149320
/gate/source/xraygun/gps/histpoint 0.059 31243650
/gate/source/xraygun/gps/histpoint 0.060 4728840
/gate/source/xraygun/gps/histpoint 0.061 4609101
/gate/source/xraygun/gps/histpoint 0.062 4495204
/gate/source/xraygun/gps/histpoint 0.063 4380014
/gate/source/xraygun/gps/histpoint 0.064 4270642
/gate/source/xraygun/gps/histpoint 0.065 4161501
/gate/source/xraygun/gps/histpoint 0.066 4056981
/gate/source/xraygun/gps/histpoint 0.067 12533190
/gate/source/xraygun/gps/histpoint 0.068 3852627
/gate/source/xraygun/gps/histpoint 0.069 5983934
/gate/source/xraygun/gps/histpoint 0.070 3006683
/gate/source/xraygun/gps/histpoint 0.071 2950863
/gate/source/xraygun/gps/histpoint 0.072 2891153
/gate/source/xraygun/gps/histpoint 0.073 2839361
/gate/source/xraygun/gps/histpoint 0.074 2783293
/gate/source/xraygun/gps/histpoint 0.075 2728802
/gate/source/xraygun/gps/histpoint 0.076 2673785
/gate/source/xraygun/gps/histpoint 0.077 2618749
/gate/source/xraygun/gps/histpoint 0.078 2565321
/gate/source/xraygun/gps/histpoint 0.079 2511379
/gate/source/xraygun/gps/histpoint 0.080 2457664
/gate/source/xraygun/gps/histpoint 0.081 2404735
/gate/source/xraygun/gps/histpoint 0.082 2353109
/gate/source/xraygun/gps/histpoint 0.083 2300754
/gate/source/xraygun/gps/histpoint 0.084 2250158
/gate/source/xraygun/gps/histpoint 0.085 2198436
/gate/source/xraygun/gps/histpoint 0.086 2148014
/gate/source/xraygun/gps/histpoint 0.087 2099556
/gate/source/xraygun/gps/histpoint 0.088 2049938
/gate/source/xraygun/gps/histpoint 0.089 2001007
/gate/source/xraygun/gps/histpoint 0.090 1954017
/gate/source/xraygun/gps/histpoint 0.091 1906210
/gate/source/xraygun/gps/histpoint 0.092 1859862
/gate/source/xraygun/gps/histpoint 0.093 1814052
/gate/source/xraygun/gps/histpoint 0.094 1768190
/gate/source/xraygun/gps/histpoint 0.095 1724112
/gate/source/xraygun/gps/histpoint 0.096 1679845
/gate/source/xraygun/gps/histpoint 0.097 1635957
/gate/source/xraygun/gps/histpoint 0.098 1593779
/gate/source/xraygun/gps/histpoint 0.099 1550634
/gate/source/xraygun/gps/histpoint 0.100 1508960
/gate/source/xraygun/gps/histpoint 0.101 1468176
/gate/source/xraygun/gps/histpoint 0.102 1427072
/gate/source/xraygun/gps/histpoint 0.103 1386639
/gate/source/xraygun/gps/histpoint 0.104 1347496
/gate/source/xraygun/gps/histpoint 0.105 1307906
/gate/source/xraygun/gps/histpoint 0.106 1269290
/gate/source/xraygun/gps/histpoint 0.107 1231110
/gate/source/xraygun/gps/histpoint 0.108 1193081
/gate/source/xraygun/gps/histpoint 0.109 1156059
/gate/source/xraygun/gps/histpoint 0.110 1119210
/gate/source/xraygun/gps/histpoint 0.111 1082767
/gate/source/xraygun/gps/histpoint 0.112 1047122
/gate/source/xraygun/gps/histpoint 0.113 1011271
/gate/source/xraygun/gps/histpoint 0.114 975809
/gate/source/xraygun/gps/histpoint 0.115 941510
/gate/source/xraygun/gps/histpoint 0.116 906413
/gate/source/xraygun/gps/histpoint 0.117 872233
/gate/source/xraygun/gps/histpoint 0.118 838459
/gate/source/xraygun/gps/histpoint 0.119 804287
/gate/source/xraygun/gps/histpoint 0.120 771102
/gate/source/xraygun/gps/histpoint 0.121 737790
/gate/source/xraygun/gps/histpoint 0.122 704404
/gate/source/xraygun/gps/histpoint 0.123 671874
/gate/source/xraygun/gps/histpoint 0.124 638689
/gate/source/xraygun/gps/histpoint 0.125 605850
/gate/source/xraygun/gps/histpoint 0.126 573689
/gate/source/xraygun/gps/histpoint 0.127 540439
/gate/source/xraygun/gps/histpoint 0.128 507833
/gate/source/xraygun/gps/histpoint 0.129 475647
/gate/source/xraygun/gps/histpoint 0.130 442021
/gate/source/xraygun/gps/histpoint 0.131 409119
/gate/source/xraygun/gps/histpoint 0.132 375561
/gate/source/xraygun/gps/histpoint 0.133 339206
/gate/source/xraygun/gps/histpoint 0.134 303907
/gate/source/xraygun/gps/histpoint 0.135 268947
/gate/source/xraygun/gps/histpoint 0.136 234089
/gate/source/xraygun/gps/histpoint 0.137 200073
/gate/source/xraygun/gps/histpoint 0.138 137100
/gate/source/xraygun/gps/histpoint 0.139 67593
/gate/source/xraygun/gps/histpoint 0.140   0
/gate/source/xraygun/gps/arbint Lin
/gate/source/xraygun/gps/mintheta 0.00 deg
/gate/source/xraygun/gps/maxtheta 12.40 deg
/gate/source/xraygun/gps/minphi 0.00 deg
/gate/source/xraygun/gps/maxphi 360.00 deg
/gate/source/xraygun/gps/angtype iso
/gate/source/xraygun/gps/centre  0.00 0.00 424.30 mm
/gate/source/list
